

/*
Copyright (c) 2015 EPFL-BBP, All rights reserved.

THIS SOFTWARE IS PROVIDED BY THE BLUE BRAIN PROJECT ``AS IS''
AND ANY EXPRESS OR IMPLIED WARRANTIES, INCLUDING, BUT NOT LIMITED TO,
THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A PARTICULAR
PURPOSE ARE DISCLAIMED. IN NO EVENT SHALL THE BLUE BRAIN PROJECT
BE LIABLE FOR ANY DIRECT, INDIRECT, INCIDENTAL, SPECIAL, EXEMPLARY, OR
CONSEQUENTIAL DAMAGES (INCLUDING, BUT NOT LIMITED TO, PROCUREMENT OF
SUBSTITUTE GOODS OR SERVICES; LOSS OF USE, DATA, OR PROFITS; OR
BUSINESS INTERRUPTION) HOWEVER CAUSED AND ON ANY THEORY OF LIABILITY,
WHETHER IN CONTRACT, STRICT LIABILITY, OR TORT (INCLUDING NEGLIGENCE
OR OTHERWISE) ARISING IN ANY WAY OUT OF THE USE OF THIS SOFTWARE, EVEN
IF ADVISED OF THE POSSIBILITY OF SUCH DAMAGE.

This work is licensed under a
Creative Commons Attribution-NonCommercial-ShareAlike 4.0 International License.
To view a copy of this license, visit
http://creativecommons.org/licenses/by-nc-sa/4.0/legalcode or send a letter to
Creative Commons,
171 Second Street, Suite 300,
San Francisco, California, 94105, USA.
*/

/*
 * @file morphology.hoc
 * @brief Morphology
 * @author Werner Van Geit @ BBP
 * @date 2015
*/

begintemplate morphology_d3f79b893e
public morphology

proc morphology(){localobj nl,import
          nl = new Import3d_SWC_read()  // nl = new Import3d_Neurolucida3()
          nl.quiet = 1
          // nl.input("morphology/BP/FW20141007-1-1-VIP.CNG.swc") // L23BPC-j150713g.CNG.swc") // SM110127B1-3-INT-IDC.CNG.swc") // BC131sdaxlay.CNG.swc") // 
          // nl.input("morphology/NGC/SM081010A5-1.CNG.swc") // SM081023A1-4-IDF.CNG.swc") // L23NGC-x130306a-cell-1.CNG.swc") // SM090317A2-IDB.CNG.swc") // SM081017B1-6-IDA.CNG.swc") // SM090918B1-3-IDA.CNG.swc") // SM090121A1-3-IDA.CNG.swc") // SM081009A4.CNG.swc") // SM081010A5-1.CNG.swc") // SM080529A1-5-IDB.CNG.swc") // SM100408A1-IDB.CNG.swc") // SM081009A1-7-IDB.CNG.swc") // SM090317A1-4-IDB.CNG.swc") // SM081024A1-2-IDA.CNG.swc") // SM100408A1-2-IDB.CNG.swc") // SM081024A1-2-IDB.CNG.swc") // SM081009A1-7-IDC.CNG.swc") // SM081119A1-6-IDD.CNG.swc") // 3-B5-NPY-Duque-Ferrante.CNG.swc") // SM090130A1-5-IDB.CNG.swc") // SM080618A1-8-IDE.CNG.swc") // SM080619A1-7-IDF.CNG.swc") // SM080903A1-3-IDA.CNG.swc") // L5NGC-j140702c-cell-6.CNG.swc") // C270106E.CNG.swc") // SM081010A4-1.CNG.swc") // BE30A.CNG.swc") // AK163lay.CNG.swc") // L5NGC-x131014b-cell-3.CNG.swc") // L23NGC-j140908c-cell-3.CNG.swc") // PE14A.CNG.swc") // AK160lay.CNG.swc") // NGFC.CNG.swc") // 
          // nl.input("morphology/Double/L23DBC-j130301b-cell-2.CNG.swc") // L23DBC-j130930b-cell-3.CNG.swc") // RP110113-L5-2-IDC.CNG.swc")
          // nl.input("morphology/Chc/RP140212-ECODE-3-IDB.CNG.swc") // VD100714B-IDB.CNG.swc") // MTC270202C-IDA.CNG.swc") // SM100428A1-3-RPINT-IDF.CNG.swc") // RP140328-CHC-4-IDA.CNG.swc") // RP110201-L5-1-IDA.CNG.swc") // SM100428A1-3-IDF.CNG.swc") // MTC261001B-IDB.CNG.swc") // MTC231001B-IDB.CNG.swc") // MTC070301B-IDC.CNG.swc") // MTC311001A-IDD.CNG.swc") // C231001B2.CNG.swc") // TF35-Axo-axonic-cell.CNG.swc") // BE62C.CNG.swc") // MTC050800D-IDD.CNG.swc") // 2001-11-09-B-L23-dendax.CNG.swc") // 082113-1COMAACscale.CNG.swc")
          // nl.input("morphology/Pvalb-IRES-Cre_Ai14-236447-02-01-01_543103327_m.CNG.swc")
          nl.input("morphology/BC143ax2.CNG.swc") // Pvalb-IRES-Cre_Ai14-236447-02-01-01_543103327_m.CNG.swc") //  nl.input("morphology/C230300D1_-_Clone_5.asc") // 
          // nl.input("morphology/Basket/FW20140527-2-1-Korbzelle.CNG.swc") // OG060922A1-4-IDA.CNG.swc") // MTC211200C-IDA.CNG.swc") // TKB060127A1-CH1-BC-N-MP-100X-1.CNG.swc") // RP110127-L5-3-IDI.CNG.swc") // MTC280600A-IDA.CNG.swc") // RP100427-123-IDP.CNG.swc") // L23BC-j131011a-cell-7.CNG.swc") // MTC180800A-IDC.CNG.swc") // RP110207-L5-2-IDB.CNG.swc") // OG060907A2-070120-CH-L6SBC-100X.CNG.swc") // FW20140107-2-1_Korbzelle.CNG.swc") // 20150426cell04_reconstruction.CNG.swc") // L23BC-x121019a.CNG.swc") // AP050510C.CNG.swc") // FW20140527-2-1-Korbzelle.CNG.swc") 
          // nl.input("morphology/Bitufted/RP110127-L5-2-IDG.CNG.swc") // RP110127-L5-2-IDI.CNG.swc") // L23BTC-j140905a-cell-2.CNG.swc") // L23BTC-j131115c-cell1.CNG.swc") // MTC191200A-IDA.CNG.swc") // MTC080800B-IDB.CNG.swc") // MTC121100B-IDJ.CNG.swc") // RP110127-L5-3-IDH.CNG.swc") // MTC020502A-IDA.CNG.swc") // L23BTC-j130408b-cell-6.CNG.swc") // L23BTC-j140828a.CNG.swc") // MTC061100A-IDC.CNG.swc") // RP110121-L5-1-IDG.CNG.swc") // RP110125-L5-2-IDG.CNG.swc")
          // nl.input("morphology/Martinotti/TKB071114A3-CH4-MC-N-DB-100X-1.CNG.swc") // RP110127-L5-3-IDF.CNG.swc") // MW140806-1-1.CNG.swc") // MW140806-3-2.CNG.swc") // TKB060508C1-CH3-MC-N-TB-100X-2.CNG.swc") // BE69E.CNG.swc") // RP110119-L5-1-IDF.CNG.swc") // FW20140107-2-1_Martinotti-Zelle.CNG.swc") // MTC030800C-IDD.CNG.swc") // AKO60sdax2lay.CNG.swc") // L23MC-j140108b-cell-2.CNG.swc") // 20140317_a2_reconstruction.CNG.swc") //  
          // nl.input("morphology/229_080211AL2-IB_JH.CNG.swc")
          // nl.input("morphology/hilarBC1.CNG.swc")  // 
          // nl.input("/home/userlab/BBP/NeuroMorpho/Chandelier/tolias/CNG version/L23ChC-x131115b-cell-1.CNG.swc") // morphology/082113-1COMAACscale.CNG.swc")
          import = new Import3d_GUI(nl, 0)
          import.instantiate($o1)
          }
endtemplate morphology_d3f79b893e
